// This CellML file was generated on 10/03/2009 at 12:46:07 at p.m. using:
//
// COR (0.9.31.1175)
// Copyright 2002-2009 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this model
// http://www.CellML.org/
// comment: FN Jeelean Lim; This CellML version of the models runs in PCEnv to reproduce the results shown in figure 8 of the published paper. Units have been checked and are consistent.
// created: W3CDTF 2009-03-03T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; jlim063@aucklanduni.ac.nz; Given Jeelean; Family Lim
// modification: W3CDTF 2009-03-19T12:17:46+13:00; Added cmeta:id's to several variables; Given Jeelean; Family Lim
// simulation: endingValue 4000
// reference: Pubmed_id 10500180; Given Baltazar; Family Aguda; title A quantitative analysis of the kinetics of the G2 DNA damage checkpoint system; volume 96; first_page 11352; title Proceedings of the National Academy of Sciences; W3CDTF 1999-09-00 00:00; last_page 11357
// reference: subject_type keyword; cell cycle
// comment: FN Jeelean Lim; This is the CellML description of Aguda's 1999 quantitative analysis of the kinetics of the G2 DNA damage checkpoint system
def model aguda_1999_b_version01 as
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit minute as
    unit second {mult: 60};
  enddef;
  def unit first_order_rate_constant as
    unit minute {expo: -1};
  enddef;

  def comp environment as
    var time: minute {pub: out};
  enddef;

  def comp rate_constants as
    var k1: first_order_rate_constant {init: 1, pub: out};
    var kn1: first_order_rate_constant {init: 10, pub: out};
    var k2: first_order_rate_constant {init: 0.1, pub: out};
    var kn2: first_order_rate_constant {init: 0.01, pub: out};
    var k2_: first_order_rate_constant {init: 0.1, pub: out};
    var k3_: first_order_rate_constant {init: 100, pub: out};
    var kn3_: first_order_rate_constant {init: 0, pub: out};
    var k4: first_order_rate_constant {init: 0, pub: out};
    var k5: first_order_rate_constant {init: 1, pub: out};
    var k6: first_order_rate_constant {init: 0.01, pub: out};
    var k7: first_order_rate_constant {init: 1, pub: out};
    var kn7: first_order_rate_constant {init: 0.01, pub: out};
    var k8: first_order_rate_constant {init: 0.1, pub: out};
    var kn8: first_order_rate_constant {init: 0.01, pub: out};
    var k8_: first_order_rate_constant {init: 0, pub: out};
    var k9: first_order_rate_constant {init: 1, pub: out};
    var k91: first_order_rate_constant {init: 1, pub: out};
    var kn9: first_order_rate_constant {init: 1, pub: out};
    var k9_: first_order_rate_constant {init: 0, pub: out};
    var k10: first_order_rate_constant {init: 0, pub: out};
    var k11: first_order_rate_constant {init: 1, pub: out};
    var k12: first_order_rate_constant {init: 0.1, pub: out};
    var k13: first_order_rate_constant {init: 1, pub: out};
    var k14: first_order_rate_constant {init: 0.0005, pub: out};
    var k14_: first_order_rate_constant {init: 1, pub: out};
    var k15: first_order_rate_constant {init: 0.01, pub: out};
    var k16: first_order_rate_constant {init: 0.0002, pub: out};
    var k17: first_order_rate_constant {init: 0.1, pub: out};
    var k18: first_order_rate_constant {init: 1, pub: out};
    var kn18: first_order_rate_constant {init: 0.01, pub: out};
    var k20: first_order_rate_constant {init: 0.1, pub: out};
    var k21: first_order_rate_constant {init: 0.01, pub: out};
    var k22: first_order_rate_constant {init: 0.1, pub: out};
    var k23: first_order_rate_constant {init: 0.1, pub: out};
    var kn23: first_order_rate_constant {init: 1, pub: out};
    var kPlk1: first_order_rate_constant {init: 0, pub: out};
    var kPlk1_: first_order_rate_constant {init: 0, pub: out};
    var kctak1: first_order_rate_constant {init: 0, pub: out};
    var kctak1_: first_order_rate_constant {init: 0, pub: out};
    var kex: first_order_rate_constant {init: 1, pub: out};
  enddef;

  def comp coefficients as
    // var{co_Chk1_1} Chk1_11: dimensionless {init: 1};
    var Rad3_4: dimensionless {init: 1};
    var Chk1P_1n1: dimensionless {init: 1};
    var Chk1P_21: dimensionless {init: -1};
    var Rad3_51: dimensionless {init: -1};
    var p53_101: dimensionless {init: 1};
    var p53_111: dimensionless {init: -1};
    var preMPF_92: dimensionless {init: -1};
    var preMPF_9r: dimensionless {init: 1};
    var preMPF_14: dimensionless {init: 1};
    var MPF_91: dimensionless {init: 1};
    var MPF_23r: dimensionless {init: 1};
    var MPF_9r1: dimensionless {init: -1};
    var MPF_231: dimensionless {init: -1};
    var MPF_151: dimensionless {init: -1};
    var p21_201: dimensionless {init: 1};
    var p21_211: dimensionless {init: 1};
    var p21_23r1: dimensionless {init: 1};
    var p21_221: dimensionless {init: -1};
    var p21_231: dimensionless {init: -1};
    var p21MPF_231: dimensionless {init: 1};
    var p21MPF_23r1: dimensionless {init: -1};
    var iCdc25_7r1: dimensionless {init: 1};
    var iCdc25_3pr1: dimensionless {init: 1};
    var iCdc25_7: dimensionless {init: -1};
    var iCdc25_2p1: dimensionless {init: -1};
    var iCdc25Ps216_2p: dimensionless {init: 1};
    var iCdc25Ps216_18r: dimensionless {init: 1};
    var iCdc25Ps216_18: dimensionless {init: -1};
    var iCdc25Ps216_3p: dimensionless {init: -1};
    var iCdc25Ps216protein1433_3p1: dimensionless {init: 1};
    var iCdc25Ps216protein1433_3pr1: dimensionless {init: -1};
    var aCdc25_71: dimensionless {init: 1};
    var aCdc25_2r1: dimensionless {init: 1};
    var aCdc25_7r1: dimensionless {init: -1};
    var aCdc25_21: dimensionless {init: -1};
    var aCDC25Ps216_21: dimensionless {init: 1};
    var aCDC25Ps216_181: dimensionless {init: 1};
    var aCDC25Ps216_2r1: dimensionless {init: -1};
    var aCDC25Ps216_18r1: dimensionless {init: -1};
    var protein1433_61: dimensionless {init: 1};
    var protein1433_131: dimensionless {init: 1};
    var protein1433_3pr1: dimensionless {init: 1};
    var protein1433_3p1: dimensionless {init: -1};
    var protein1433_121: dimensionless {init: -1};
    var Wee1_161: dimensionless {init: 1};
    var Wee1_8r1: dimensionless {init: 1};
    var Wee1_81: dimensionless {init: -1};
    var Wee1P_81: dimensionless {init: 1};
    var Wee1P_8r1: dimensionless {init: -1};
    var Wee1P_171: dimensionless {init: -1};
  enddef;

  def comp Chk1P as
    var Chk1P: dimensionless {init: 0.000001, pub: out};
    var V_n1: first_order_rate_constant {pub: in};
    var V_1: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Chk1P, time) = V_1-V_n1;
  enddef;

  def comp Rad3 as
    var Rad3: dimensionless {init: 0, pub: out};
    var V_4: first_order_rate_constant {pub: in};
    var V_5: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Rad3, time) = V_4-V_5;
  enddef;

  def comp p53 as
    var p53: dimensionless {init: 0, pub: out};
    var V_10: first_order_rate_constant {pub: in};
    var V_11: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(p53, time) = V_10-V_11;
  enddef;

  def comp preMPF as
    var preMPF: dimensionless {init: 0.000001, pub: out};
    var V_14: first_order_rate_constant {pub: in};
    var V_n9: first_order_rate_constant {pub: in};
    var V_9: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(preMPF, time) = V_14+V_n9-V_9;
  enddef;

  def comp MPF as
    var MPF: dimensionless {init: 0.00000001, pub: out};
    var V_9: first_order_rate_constant {pub: in};
    var V_n23: first_order_rate_constant {pub: in};
    var V_n9: first_order_rate_constant {pub: in};
    var V_23: first_order_rate_constant {pub: in};
    var V_15: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(MPF, time) = V_9+V_n23-(V_n9+V_23+V_15);
  enddef;

  def comp p21 as
    var p21: dimensionless {init: 0, pub: out};
    var V_21: first_order_rate_constant {pub: in};
    var V_20: first_order_rate_constant {pub: in};
    var V_n23: first_order_rate_constant {pub: in};
    var V_22: first_order_rate_constant {pub: in};
    var V_23: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(p21, time) = V_20+V_21+V_n23-(V_22+V_23);
  enddef;

  def comp p21_MPF as
    var p21_MPF: dimensionless {init: 0, pub: out};
    var V_23: first_order_rate_constant {pub: in};
    var V_n23: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(p21_MPF, time) = V_23-V_n23;
  enddef;

  def comp iCdc25 as
    var iCdc25: dimensionless {init: 0.000001, pub: out};
    var V_n7: first_order_rate_constant {pub: in};
    var V_n3_: first_order_rate_constant {pub: in};
    var V_7: first_order_rate_constant {pub: in};
    var V_2_: first_order_rate_constant {pub: in};
    var V_in: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(iCdc25, time) = V_n7+V_n3_+V_in-(V_7+V_2_);
  enddef;

  def comp iCdc25Ps216 as
    var iCdc25Ps216: dimensionless {init: 0.00002, pub: out};
    var V_2_: first_order_rate_constant {pub: in};
    var V_n18: first_order_rate_constant {pub: in};
    var V_18: first_order_rate_constant {pub: in};
    var V_3_: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(iCdc25Ps216, time) = V_2_+V_n18-(V_18+V_3_);
  enddef;

  def comp iCdc25Ps216_protein1433 as
    var iCdc25Ps216_protein1433: dimensionless {init: 0.03, pub: out};
    var V_3_: first_order_rate_constant {pub: in};
    var V_n3_: first_order_rate_constant {pub: in};
    var V_ex: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(iCdc25Ps216_protein1433, time) = V_3_-(V_n3_+V_ex);
  enddef;

  def comp aCdc25 as
    var aCdc25: dimensionless {init: 0.000001, pub: out};
    var V_7: first_order_rate_constant {pub: in};
    var V_n2: first_order_rate_constant {pub: in};
    var V_n7: first_order_rate_constant {pub: in};
    var V_2: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(aCdc25, time) = V_7+V_n2-(V_n7+V_2);
  enddef;

  def comp aCdc25Ps216 as
    var aCdc25Ps216: dimensionless {init: 0, pub: out};
    var V_2: first_order_rate_constant {pub: in};
    var V_18: first_order_rate_constant {pub: in};
    var V_n2: first_order_rate_constant {pub: in};
    var V_n18: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(aCdc25Ps216, time) = V_2+V_18-(V_n2+V_n18);
  enddef;

  def comp protein1433 as
    var protein1433: dimensionless {init: 2, pub: out};
    var V_6: first_order_rate_constant {pub: in};
    var V_13: first_order_rate_constant {pub: in};
    var V_n3_: first_order_rate_constant {pub: in};
    var V_3_: first_order_rate_constant {pub: in};
    var V_12: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(protein1433, time) = V_6+V_13+V_n3_-(V_3_+V_12);
  enddef;

  def comp Wee1 as
    var Wee1: dimensionless {init: 0.001, pub: out};
    var V_16: first_order_rate_constant {pub: in};
    var V_n8: first_order_rate_constant {pub: in};
    var V_8: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Wee1, time) = V_16+V_n8-V_8;
  enddef;

  def comp Wee1P as
    var Wee1P: dimensionless {init: 0, pub: out};
    var V_8: first_order_rate_constant {pub: in};
    var V_n8: first_order_rate_constant {pub: in};
    var V_17: first_order_rate_constant {pub: in};
    var time: minute {pub: in};
    ode(Wee1P, time) = V_8-(V_n8+V_17);
  enddef;

  def comp aCdc25_T as
    var aCdc25_T: dimensionless {pub: out};
    var aCdc25: dimensionless {pub: in};
    var aCdc25Ps216: dimensionless {pub: in};
    aCdc25_T = aCdc25+aCdc25Ps216;
  enddef;

  def comp V_1 as
    var V_1: first_order_rate_constant {pub: out};
    var k1: first_order_rate_constant {pub: in};
    var Chk1: dimensionless;
    var Chk1P: dimensionless {pub: in};
    var Chk1_T: dimensionless {init: 1};
    var Rad3: dimensionless {pub: in};
    Chk1 = Chk1_T-Chk1P;
    V_1 = k1*Chk1*Rad3;
  enddef;

  def comp V_n1 as
    var V_n1: first_order_rate_constant {pub: out};
    var kn1: first_order_rate_constant {pub: in};
    var Chk1P: dimensionless {pub: in};
    V_n1 = kn1*Chk1P;
  enddef;

  def comp V_2 as
    var V_2: first_order_rate_constant {pub: out};
    var k2: first_order_rate_constant {pub: in};
    var kctak1: first_order_rate_constant {pub: in};
    var Chk1P: dimensionless {pub: in};
    var aCdc25: dimensionless {pub: in};
    V_2 = k2*Chk1P*aCdc25+kctak1*aCdc25;
  enddef;

  def comp V_n2 as
    var V_n2: first_order_rate_constant {pub: out};
    var kn2: first_order_rate_constant {pub: in};
    var aCdc25Ps216: dimensionless {pub: in};
    V_n2 = kn2*aCdc25Ps216;
  enddef;

  def comp V_2_ as
    var V_2_: first_order_rate_constant {pub: out};
    var k2_: first_order_rate_constant {pub: in};
    var kctak1_: first_order_rate_constant {pub: in};
    var Chk1P: dimensionless {pub: in};
    var iCdc25: dimensionless {pub: in};
    V_2_ = k2_*Chk1P*iCdc25+kctak1_*iCdc25;
  enddef;

  def comp V_3_ as
    var V_3_: first_order_rate_constant {pub: out};
    var k3_: first_order_rate_constant {pub: in};
    var iCdc25Ps216: dimensionless {pub: in};
    var protein1433: dimensionless {pub: in};
    V_3_ = k3_*iCdc25Ps216*protein1433;
  enddef;

  def comp V_n3_ as
    var V_n3_: first_order_rate_constant {pub: out};
    var kn3_: first_order_rate_constant {pub: in};
    var iCdc25Ps216_protein1433: dimensionless {pub: in};
    V_n3_ = kn3_*iCdc25Ps216_protein1433;
  enddef;

  def comp V_4 as
    var V_4: first_order_rate_constant {pub: out};
    var k4: first_order_rate_constant {pub: in};
    V_4 = k4;
  enddef;

  def comp V_5 as
    var V_5: first_order_rate_constant {pub: out};
    var k5: first_order_rate_constant {pub: in};
    var Rad3: dimensionless {pub: in};
    V_5 = k5*Rad3;
  enddef;

  def comp V_6 as
    var V_6: first_order_rate_constant {pub: out};
    var k6: first_order_rate_constant {pub: in};
    var p53: dimensionless {pub: in};
    V_6 = k6*p53;
  enddef;

  def comp V_7 as
    var V_7: first_order_rate_constant {pub: out};
    var k7: first_order_rate_constant {pub: in};
    var kPlk1: first_order_rate_constant {pub: in};
    var MPF: dimensionless {pub: in};
    var iCdc25: dimensionless {pub: in};
    V_7 = k7*MPF*iCdc25+kPlk1*iCdc25;
  enddef;

  def comp V_n7 as
    var V_n7: first_order_rate_constant {pub: out};
    var kn7: first_order_rate_constant {pub: in};
    var aCdc25: dimensionless {pub: in};
    V_n7 = kn7*aCdc25;
  enddef;

  def comp V_8 as
    var V_8: first_order_rate_constant {pub: out};
    var k8: first_order_rate_constant {pub: in};
    var k8_: first_order_rate_constant {pub: in};
    var MPF: dimensionless {pub: in};
    var Wee1: dimensionless {pub: in};
    V_8 = k8*MPF*Wee1+k8_*Wee1;
  enddef;

  def comp V_n8 as
    var V_n8: first_order_rate_constant {pub: out};
    var kn8: first_order_rate_constant {pub: in};
    var Wee1P: dimensionless {pub: in};
    V_n8 = kn8*Wee1P;
  enddef;

  def comp V_9 as
    var V_9: first_order_rate_constant {pub: out};
    var k9: first_order_rate_constant {pub: in};
    var k9_: first_order_rate_constant {pub: in};
    var preMPF: dimensionless {pub: in};
    var aCdc25: dimensionless {pub: in};
    var aCdc25Ps216: dimensionless {pub: in};
    V_9 = k9*(aCdc25+aCdc25Ps216)*preMPF+k9_*preMPF;
  enddef;

  def comp V_n9 as
    var V_n9: first_order_rate_constant {pub: out};
    var kn9: first_order_rate_constant {pub: in};
    var MPF: dimensionless {pub: in};
    var Wee1: dimensionless {pub: in};
    V_n9 = kn9*MPF*Wee1;
  enddef;

  def comp V_10 as
    var V_10: first_order_rate_constant {pub: out};
    var k10: first_order_rate_constant {pub: in};
    V_10 = k10;
  enddef;

  def comp V_11 as
    var V_11: first_order_rate_constant {pub: out};
    var k11: first_order_rate_constant {pub: in};
    var p53: dimensionless {pub: in};
    V_11 = k11*p53;
  enddef;

  def comp V_12 as
    var V_12: first_order_rate_constant {pub: out};
    var k12: first_order_rate_constant {pub: in};
    var protein1433: dimensionless {pub: in};
    V_12 = k12*protein1433;
  enddef;

  def comp V_13 as
    var V_13: first_order_rate_constant {pub: out};
    var k13: first_order_rate_constant {pub: in};
    V_13 = k13;
  enddef;

  def comp V_14 as
    var V_14: first_order_rate_constant {pub: out};
    var k14: first_order_rate_constant {pub: in};
    var k14_: first_order_rate_constant {pub: in};
    var p53: dimensionless {pub: in};
    V_14 = k14/(1{first_order_rate_constant}+k14_*p53)*1{first_order_rate_constant};
  enddef;

  def comp V_15 as
    var V_15: first_order_rate_constant {pub: out};
    var k15: first_order_rate_constant {pub: in};
    var MPF: dimensionless {pub: in};
    V_15 = k15*sqr(MPF);
  enddef;

  def comp V_16 as
    var V_16: first_order_rate_constant {pub: out};
    var k16: first_order_rate_constant {pub: in};
    V_16 = k16;
  enddef;

  def comp V_17 as
    var V_17: first_order_rate_constant {pub: out};
    var k17: first_order_rate_constant {pub: in};
    var Wee1P: dimensionless {pub: in};
    V_17 = k17*Wee1P;
  enddef;

  def comp V_18 as
    var V_18: first_order_rate_constant {pub: out};
    var k18: first_order_rate_constant {pub: in};
    var kPlk1_: first_order_rate_constant {pub: in};
    var MPF: dimensionless {pub: in};
    var iCdc25Ps216: dimensionless {pub: in};
    V_18 = k18*MPF*iCdc25Ps216+kPlk1_*iCdc25Ps216;
  enddef;

  def comp V_n18 as
    var V_n18: first_order_rate_constant {pub: out};
    var kn18: first_order_rate_constant {pub: in};
    var aCdc25Ps216: dimensionless {pub: in};
    V_n18 = kn18*aCdc25Ps216;
  enddef;

  def comp V_20 as
    var V_20: first_order_rate_constant {pub: out};
    var k20: first_order_rate_constant {pub: in};
    var p53: dimensionless {pub: in};
    V_20 = k20*p53;
  enddef;

  def comp V_21 as
    var V_21: first_order_rate_constant {pub: out};
    var k21: first_order_rate_constant {pub: in};
    V_21 = k21;
  enddef;

  def comp V_22 as
    var V_22: first_order_rate_constant {pub: out};
    var k22: first_order_rate_constant {pub: in};
    var p21: dimensionless {pub: in};
    V_22 = k22*p21;
  enddef;

  def comp V_23 as
    var V_23: first_order_rate_constant {pub: out};
    var k23: first_order_rate_constant {pub: in};
    var MPF: dimensionless {pub: in};
    var p21: dimensionless {pub: in};
    V_23 = k23*MPF*p21;
  enddef;

  def comp V_n23 as
    var V_n23: first_order_rate_constant {pub: out};
    var kn23: first_order_rate_constant {pub: in};
    var p21_MPF: dimensionless {pub: in};
    V_n23 = kn23*p21_MPF;
  enddef;

  def comp V_ex as
    var V_ex: first_order_rate_constant {pub: out};
    var kex: first_order_rate_constant {pub: in};
    var iCdc25Ps216_protein1433: dimensionless {pub: in};
    V_ex = kex*iCdc25Ps216_protein1433;
  enddef;

  def comp V_in as
    var V_in: first_order_rate_constant {init: 0.00001, pub: out};
  enddef;
  def map between Chk1P and environment for
    vars time and time;
  enddef;
  def map between Rad3 and environment for
    vars time and time;
  enddef;
  def map between p53 and environment for
    vars time and time;
  enddef;
  def map between preMPF and environment for
    vars time and time;
  enddef;
  def map between MPF and environment for
    vars time and time;
  enddef;
  def map between p21 and environment for
    vars time and time;
  enddef;
  def map between p21_MPF and environment for
    vars time and time;
  enddef;
  def map between iCdc25 and environment for
    vars time and time;
  enddef;
  def map between iCdc25Ps216 and environment for
    vars time and time;
  enddef;
  def map between iCdc25Ps216_protein1433 and environment for
    vars time and time;
  enddef;
  def map between aCdc25 and environment for
    vars time and time;
  enddef;
  def map between aCdc25Ps216 and environment for
    vars time and time;
  enddef;
  def map between protein1433 and environment for
    vars time and time;
  enddef;
  def map between Wee1 and environment for
    vars time and time;
  enddef;
  def map between Wee1P and environment for
    vars time and time;
  enddef;
  def map between Chk1P and V_n1 for
    vars V_n1 and V_n1;
    vars Chk1P and Chk1P;
  enddef;
  def map between Chk1P and V_1 for
    vars V_1 and V_1;
    vars Chk1P and Chk1P;
  enddef;
  def map between Rad3 and V_4 for
    vars V_4 and V_4;
  enddef;
  def map between Rad3 and V_5 for
    vars V_5 and V_5;
    vars Rad3 and Rad3;
  enddef;
  def map between p53 and V_10 for
    vars V_10 and V_10;
  enddef;
  def map between p53 and V_11 for
    vars V_11 and V_11;
    vars p53 and p53;
  enddef;
  def map between preMPF and V_14 for
    vars V_14 and V_14;
  enddef;
  def map between preMPF and V_n9 for
    vars V_n9 and V_n9;
  enddef;
  def map between preMPF and V_9 for
    vars V_9 and V_9;
    vars preMPF and preMPF;
  enddef;
  def map between MPF and V_9 for
    vars V_9 and V_9;
  enddef;
  def map between MPF and V_n23 for
    vars V_n23 and V_n23;
  enddef;
  def map between MPF and V_n9 for
    vars V_n9 and V_n9;
    vars MPF and MPF;
  enddef;
  def map between MPF and V_23 for
    vars V_23 and V_23;
    vars MPF and MPF;
  enddef;
  def map between MPF and V_15 for
    vars V_15 and V_15;
    vars MPF and MPF;
  enddef;
  def map between p21 and V_21 for
    vars V_21 and V_21;
  enddef;
  def map between p21 and V_20 for
    vars V_20 and V_20;
  enddef;
  def map between p21 and V_n23 for
    vars V_n23 and V_n23;
  enddef;
  def map between p21 and V_22 for
    vars V_22 and V_22;
    vars p21 and p21;
  enddef;
  def map between p21 and V_23 for
    vars V_23 and V_23;
    vars p21 and p21;
  enddef;
  def map between p21_MPF and V_23 for
    vars V_23 and V_23;
  enddef;
  def map between p21_MPF and V_n23 for
    vars V_n23 and V_n23;
    vars p21_MPF and p21_MPF;
  enddef;
  def map between iCdc25 and V_n7 for
    vars V_n7 and V_n7;
  enddef;
  def map between iCdc25 and V_n3_ for
    vars V_n3_ and V_n3_;
  enddef;
  def map between iCdc25 and V_7 for
    vars V_7 and V_7;
    vars iCdc25 and iCdc25;
  enddef;
  def map between iCdc25 and V_2_ for
    vars V_2_ and V_2_;
    vars iCdc25 and iCdc25;
  enddef;
  def map between iCdc25 and V_in for
    vars V_in and V_in;
  enddef;
  def map between iCdc25Ps216 and V_2_ for
    vars V_2_ and V_2_;
  enddef;
  def map between iCdc25Ps216 and V_n18 for
    vars V_n18 and V_n18;
  enddef;
  def map between iCdc25Ps216 and V_18 for
    vars V_18 and V_18;
    vars iCdc25Ps216 and iCdc25Ps216;
  enddef;
  def map between iCdc25Ps216 and V_3_ for
    vars V_3_ and V_3_;
    vars iCdc25Ps216 and iCdc25Ps216;
  enddef;
  def map between iCdc25Ps216_protein1433 and V_3_ for
    vars V_3_ and V_3_;
  enddef;
  def map between iCdc25Ps216_protein1433 and V_n3_ for
    vars V_n3_ and V_n3_;
    vars iCdc25Ps216_protein1433 and iCdc25Ps216_protein1433;
  enddef;
  def map between iCdc25Ps216_protein1433 and V_ex for
    vars V_ex and V_ex;
    vars iCdc25Ps216_protein1433 and iCdc25Ps216_protein1433;
  enddef;
  def map between aCdc25 and V_7 for
    vars V_7 and V_7;
  enddef;
  def map between aCdc25 and V_n2 for
    vars V_n2 and V_n2;
  enddef;
  def map between aCdc25 and V_n7 for
    vars V_n7 and V_n7;
    vars aCdc25 and aCdc25;
  enddef;
  def map between aCdc25 and V_2 for
    vars V_2 and V_2;
    vars aCdc25 and aCdc25;
  enddef;
  def map between aCdc25Ps216 and V_2 for
    vars V_2 and V_2;
  enddef;
  def map between aCdc25Ps216 and V_18 for
    vars V_18 and V_18;
  enddef;
  def map between aCdc25Ps216 and V_n2 for
    vars V_n2 and V_n2;
    vars aCdc25Ps216 and aCdc25Ps216;
  enddef;
  def map between aCdc25Ps216 and V_n18 for
    vars V_n18 and V_n18;
    vars aCdc25Ps216 and aCdc25Ps216;
  enddef;
  def map between protein1433 and V_6 for
    vars V_6 and V_6;
  enddef;
  def map between protein1433 and V_13 for
    vars V_13 and V_13;
  enddef;
  def map between protein1433 and V_n3_ for
    vars V_n3_ and V_n3_;
  enddef;
  def map between protein1433 and V_3_ for
    vars V_3_ and V_3_;
    vars protein1433 and protein1433;
  enddef;
  def map between protein1433 and V_12 for
    vars V_12 and V_12;
    vars protein1433 and protein1433;
  enddef;
  def map between Wee1 and V_16 for
    vars V_16 and V_16;
  enddef;
  def map between Wee1 and V_n8 for
    vars V_n8 and V_n8;
  enddef;
  def map between Wee1 and V_8 for
    vars V_8 and V_8;
    vars Wee1 and Wee1;
  enddef;
  def map between Wee1P and V_8 for
    vars V_8 and V_8;
  enddef;
  def map between Wee1P and V_n8 for
    vars V_n8 and V_n8;
    vars Wee1P and Wee1P;
  enddef;
  def map between Wee1P and V_17 for
    vars V_17 and V_17;
    vars Wee1P and Wee1P;
  enddef;
  def map between aCdc25_T and aCdc25 for
    vars aCdc25 and aCdc25;
  enddef;
  def map between aCdc25_T and aCdc25Ps216 for
    vars aCdc25Ps216 and aCdc25Ps216;
  enddef;
  def map between V_1 and rate_constants for
    vars k1 and k1;
  enddef;
  def map between V_1 and Rad3 for
    vars Rad3 and Rad3;
  enddef;
  def map between V_n1 and rate_constants for
    vars kn1 and kn1;
  enddef;
  def map between V_2 and rate_constants for
    vars k2 and k2;
    vars kctak1 and kctak1;
  enddef;
  def map between V_2 and Chk1P for
    vars Chk1P and Chk1P;
  enddef;
  def map between V_n2 and rate_constants for
    vars kn2 and kn2;
  enddef;
  def map between V_2_ and rate_constants for
    vars k2_ and k2_;
    vars kctak1_ and kctak1_;
  enddef;
  def map between V_2_ and Chk1P for
    vars Chk1P and Chk1P;
  enddef;
  def map between V_3_ and rate_constants for
    vars k3_ and k3_;
  enddef;
  def map between V_n3_ and rate_constants for
    vars kn3_ and kn3_;
  enddef;
  def map between V_4 and rate_constants for
    vars k4 and k4;
  enddef;
  def map between V_5 and rate_constants for
    vars k5 and k5;
  enddef;
  def map between V_6 and rate_constants for
    vars k6 and k6;
  enddef;
  def map between V_6 and p53 for
    vars p53 and p53;
  enddef;
  def map between V_7 and rate_constants for
    vars k7 and k7;
    vars kPlk1 and kPlk1;
  enddef;
  def map between V_7 and MPF for
    vars MPF and MPF;
  enddef;
  def map between V_n7 and rate_constants for
    vars kn7 and kn7;
  enddef;
  def map between V_8 and rate_constants for
    vars k8 and k8;
    vars k8_ and k8_;
  enddef;
  def map between V_8 and MPF for
    vars MPF and MPF;
  enddef;
  def map between V_n8 and rate_constants for
    vars kn8 and kn8;
  enddef;
  def map between V_9 and rate_constants for
    vars k9 and k9;
    vars k9_ and k9_;
  enddef;
  def map between V_9 and aCdc25 for
    vars aCdc25 and aCdc25;
  enddef;
  def map between V_9 and aCdc25Ps216 for
    vars aCdc25Ps216 and aCdc25Ps216;
  enddef;
  def map between V_n9 and rate_constants for
    vars kn9 and kn9;
  enddef;
  def map between V_n9 and Wee1 for
    vars Wee1 and Wee1;
  enddef;
  def map between V_10 and rate_constants for
    vars k10 and k10;
  enddef;
  def map between V_11 and rate_constants for
    vars k11 and k11;
  enddef;
  def map between V_12 and rate_constants for
    vars k12 and k12;
  enddef;
  def map between V_13 and rate_constants for
    vars k13 and k13;
  enddef;
  def map between V_14 and rate_constants for
    vars k14 and k14;
    vars k14_ and k14_;
  enddef;
  def map between V_14 and p53 for
    vars p53 and p53;
  enddef;
  def map between V_15 and rate_constants for
    vars k15 and k15;
  enddef;
  def map between V_16 and rate_constants for
    vars k16 and k16;
  enddef;
  def map between V_17 and rate_constants for
    vars k17 and k17;
  enddef;
  def map between V_18 and rate_constants for
    vars k18 and k18;
    vars kPlk1_ and kPlk1_;
  enddef;
  def map between V_18 and MPF for
    vars MPF and MPF;
  enddef;
  def map between V_n18 and rate_constants for
    vars kn18 and kn18;
  enddef;
  def map between V_20 and rate_constants for
    vars k20 and k20;
  enddef;
  def map between V_20 and p53 for
    vars p53 and p53;
  enddef;
  def map between V_21 and rate_constants for
    vars k21 and k21;
  enddef;
  def map between V_22 and rate_constants for
    vars k22 and k22;
  enddef;
  def map between V_23 and rate_constants for
    vars k23 and k23;
  enddef;
  def map between V_n23 and rate_constants for
    vars kn23 and kn23;
  enddef;
  def map between V_ex and rate_constants for
    vars kex and kex;
  enddef;
  // A quantitative analysis of the kinetics of the G2 DNA damage checkpoint system
  //
  // Jeelean Lim
  //
  // Bioengineering Institute, University of Auckland
  //
  // Model Status
  //
  // This CellML version of the models runs in PCEnv to reproduce the results shown in figure 8 of the published paper. Units have been checked and are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: A detailed model of the G2 DNA damage checkpoint (G2DDC) system is presented that includes complex regulatory networks of the mitotic kinase Cdc2, phosphatase Cdc25, Wee1 kinase, and damage signal transduction pathways involving Chk1 and p53. Assumptions on the kinetic equations of the G2DDC are made, and computer simulations are carried out to demonstrate how the various subsystems operate to delay or arrest cell cycle progression. The detailed model could be used to explain various experiments relevant to G2DDC reported recently, including the nuclear export of 1433 bound Cdc25, the down-regulation of cyclin B1 expression by p53, the effect of Chk1 and p53 on Cdc25 levels, and Wee1 degradation. It also is shown that, under certain conditions, p53 is necessary to sustain a G2 arrest.
  //
  // The complete original paper reference is cited below:
  //
  // A quantitative analysis of the kinetics of the G2 DNA damage checkpoint system, Baltazar D. Aguda, 1999 Proceedings of the National Academy of Sciences, 96, 11352-11357 PubMed ID: 10500180 (http://www.ncbi.nlm.nih.gov/pubmed/10500180)
  //
  // Figure 1
  //
  // Schematic diagram of the G2DDC system showing the subsystems involving Wee1, MPF, Cdc25, and signal transduction pathways.
  //
  // Figure 2
  //
  // The MPF subsystem.
  //
  // Figure 4
  //
  // The Cdc25 subsystem.
  //
  // Figure 6
  //
  // The Wee1 subsystem.
enddef;
// rdf:#f3fae837-7c3e-4833-a4b8-3e14da248e7c
// FN: Jeelean Lim
// rdf:#d4163cf8-2e07-47b7-beb0-1ff9b68ac0a0
// Given: Jeelean
// Family: Lim
// rdf:#06d28ed9-2b7b-4ed3-885c-3e121779dc23
// modified: W3CDTF 2009-03-10T13:03:36+13:00
// value: Corrected several mistakes in the parameters as specified by the errata list supplied by the model author: 1) kn8 = 0.01 2) k17, k2, k2_ = 0.1 Also, the rates Vex and Vin were added into the equations: 1) d/dt(iCdc25) = vm7+vm3p+vin-(v7+v2p) 2) d/dt(iCdc25Ps2161433) = v3p-(vm3p+vex)
// rdf:#4425f300-ff51-417b-9171-f363b45d2c1c
// value: This CellML version of the models runs in PCEnv to reproduce the results shown in figure 8 of the published paper. Units have been checked and are consistent.
