// This CellML file was generated on 10/19/2007 at 1:20:11 at PM using:
//
// COR (0.9.31.769)
// Copyright 2002-2007 Dr Alan Garny
// http://COR.physiol.ox.ac.uk/ - COR@physiol.ox.ac.uk
//
// CellML 1.0 was used to generate this cellular model
// http://www.CellML.org/
// publisher: Bioengineering Institute
// comment: FN James Lawson; This model has been rebuilt using the differential rate equations that Ferrel et al. use in their paper to describe the signalling pathway. This model is able to reproduce precisely the same output as that given by running the Mathematica description of the model (provided by the author) using the Mathematica NDSolve integration algorithm. This version of the model runs in both PCEnv (0.2+) and COR.
// created: W3CDTF 2007-10-23T00:00:00+00:00
// creator: Orgname The University of Auckland; Orgunit Auckland Bioengineering Institute; j.lawson@auckland.ac.nz; Given James; Family Lawson; Other Richard
// simulation: endingValue 50
// reference: Pubmed_id 8816754; Given Chi-Ying; Family Huang; Other F; Given James; Family Ferrell; Other E; title Ultrasensitivity in the mitogen-activated protein kinase cascade; volume 93; first_page 10078; title Proceedings of the National Academy of Science, USA; W3CDTF 1996-09-17 00:00; last_page 10083
// reference: subject_type keyword; MAPK; signal transduction; oocyte
// comment: FN James Lawson; This is the CellML description of Huang and Ferrell's mathematical model of the mitogen-activated protein kinase (MAPK) cascade (1996). This signalling pathway involves a series of three, highly conserved protein kinases which are associated with a diverse array of biological responses.
def model huang_ferrell_1996_version03 as
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit first_order_rate_constant_units as
    unit second {expo: -1};
  enddef;
  def unit second_order_rate_constant_units as
    unit micromolar {expo: -1};
    unit second {expo: -1};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;

  def comp total_concs as
    var mostot: micromolar {init: 0.003, pub: out};
    var e1tot: micromolar {init: 0.0003, pub: out};
    var e2tot: micromolar {init: 0.0003, pub: out};
    var mektot: micromolar {init: 1.2, pub: out};
    var mekpasetot: micromolar {init: 0.0003, pub: out};
    var mapktot: micromolar {init: 1.2, pub: out};
    var mapkpasetot: micromolar {init: 0.12, pub: out};
  enddef;

  def comp rate_constants as
    var a1: second_order_rate_constant_units {init: 1000, pub: out};
    var a2: second_order_rate_constant_units {init: 1000, pub: out};
    var a3: second_order_rate_constant_units {init: 1000, pub: out};
    var a4: second_order_rate_constant_units {init: 1000, pub: out};
    var a5: second_order_rate_constant_units {init: 1000, pub: out};
    var a6: second_order_rate_constant_units {init: 1000, pub: out};
    var a7: second_order_rate_constant_units {init: 1000, pub: out};
    var a8: second_order_rate_constant_units {init: 1000, pub: out};
    var a9: second_order_rate_constant_units {init: 1000, pub: out};
    var a10: second_order_rate_constant_units {init: 1000, pub: out};
    var d1: first_order_rate_constant_units {init: 150, pub: out};
    var d2: first_order_rate_constant_units {init: 150, pub: out};
    var d3: first_order_rate_constant_units {init: 150, pub: out};
    var d4: first_order_rate_constant_units {init: 150, pub: out};
    var d5: first_order_rate_constant_units {init: 150, pub: out};
    var d6: first_order_rate_constant_units {init: 150, pub: out};
    var d7: first_order_rate_constant_units {init: 150, pub: out};
    var d8: first_order_rate_constant_units {init: 150, pub: out};
    var d9: first_order_rate_constant_units {init: 150, pub: out};
    var d10: first_order_rate_constant_units {init: 150, pub: out};
    var k1: first_order_rate_constant_units {init: 150, pub: out};
    var k2: first_order_rate_constant_units {init: 150, pub: out};
    var k3: first_order_rate_constant_units {init: 150, pub: out};
    var k4: first_order_rate_constant_units {init: 150, pub: out};
    var k5: first_order_rate_constant_units {init: 150, pub: out};
    var k6: first_order_rate_constant_units {init: 150, pub: out};
    var k7: first_order_rate_constant_units {init: 150, pub: out};
    var k8: first_order_rate_constant_units {init: 150, pub: out};
    var k9: first_order_rate_constant_units {init: 150, pub: out};
    var k10: first_order_rate_constant_units {init: 150, pub: out};
  enddef;

  def comp coefficients as
    var mos_1: dimensionless {init: -1};
    var e1_1: dimensionless {init: -1};
    var mose1_1: dimensionless {init: 1};
    var mose1_2: dimensionless {init: -1};
    var mosstar_2: dimensionless {init: 1};
    var e1_2: dimensionless {init: 1};
    var mose1_3: dimensionless {init: -1};
    var mosstar_3: dimensionless {init: 1};
    var e1_3: dimensionless {init: 1};
    var mosstar_4: dimensionless {init: -1};
    var e2_4: dimensionless {init: -1};
    var mose2_4: dimensionless {init: 1};
    var mose2_5: dimensionless {init: -1};
    var mos_5: dimensionless {init: 1};
    var e2_5: dimensionless {init: 1};
    var mosstare2_6: dimensionless {init: -1};
    var mos_6: dimensionless {init: 1};
    var e2_6: dimensionless {init: 1};
    var mek_7: dimensionless {init: -1};
    var mosstar_7: dimensionless {init: -1};
    var mekmosstar_7: dimensionless {init: 1};
    var mekmosstar_8: dimensionless {init: -1};
    var mek_8: dimensionless {init: 1};
    var mosstar_8: dimensionless {init: 1};
    var mekmosstar_9: dimensionless {init: -1};
    var mekp_9: dimensionless {init: 1};
    var mosstar_9: dimensionless {init: 1};
    var mekp_10: dimensionless {init: -1};
    var mekpase_10: dimensionless {init: -1};
    var mekpmekpase_10: dimensionless {init: 1};
    var mekpmekpase_11: dimensionless {init: -1};
    var mekp_11: dimensionless {init: 1};
    var mekpase_11: dimensionless {init: 1};
    var mekpmekpase_12: dimensionless {init: -1};
    var mek_12: dimensionless {init: 1};
    var mekpase_12: dimensionless {init: 1};
    var mekp_13: dimensionless {init: -1};
    var mosstar_13: dimensionless {init: -1};
    var mekpmosstar_13: dimensionless {init: 1};
    var mekpmosstar_14: dimensionless {init: -1};
    var mekp_14: dimensionless {init: 1};
    var mosstar_14: dimensionless {init: 1};
    var mekpmosstar_15: dimensionless {init: -1};
    var mekpp_15: dimensionless {init: 1};
    var mosstar_15: dimensionless {init: 1};
    var mekpp_16: dimensionless {init: -1};
    var mekpase_16: dimensionless {init: -1};
    var mekppmekpase_16: dimensionless {init: 1};
    var mekppmekpase_17: dimensionless {init: -1};
    var mekp_17: dimensionless {init: 1};
    var mekpase_17: dimensionless {init: 1};
    var mekppmekpase_18: dimensionless {init: -1};
    var mekp_18: dimensionless {init: 1};
    var mekpase_18: dimensionless {init: 1};
    var mekpp_19: dimensionless {init: -1};
    var mapk_19: dimensionless {init: -1};
    var mekppmapk_19: dimensionless {init: 1};
    var mekppmapk_20: dimensionless {init: -1};
    var mekpp_20: dimensionless {init: 1};
    var mapkp_20: dimensionless {init: 1};
    var mekppmapk_21: dimensionless {init: -1};
    var mekpp_21: dimensionless {init: 1};
    var makp_21: dimensionless {init: 1};
    var mapkp_22: dimensionless {init: -1};
    var mapkpase_22: dimensionless {init: -1};
    var mapkpmapkpase_22: dimensionless {init: 1};
    var mapkpmapkpase_23: dimensionless {init: -1};
    var mapk_23: dimensionless {init: 1};
    var mapkpase_23: dimensionless {init: 1};
    var mapkpmapkpase_24: dimensionless {init: -1};
    var mapk_24: dimensionless {init: 1};
    var mapkpase_24: dimensionless {init: 1};
    var mapkp_25: dimensionless {init: -1};
    var mekpp_25: dimensionless {init: -1};
    var mapkpmekpp_25: dimensionless {init: 1};
    var mapkpmekpp_26: dimensionless {init: -1};
    var mapkpp_26: dimensionless {init: 1};
    var mekpp_26: dimensionless {init: 1};
    var mapkpmekpp_27: dimensionless {init: -1};
    var mapkpp_27: dimensionless {init: 1};
    var mekpp_27: dimensionless {init: 1};
    var mapkpp_28: dimensionless {init: -1};
    var mapkpase_28: dimensionless {init: -1};
    var mekppmapkpase_28: dimensionless {init: 1};
    var mekppmapkpase_29: dimensionless {init: -1};
    var mapkp_29: dimensionless {init: 1};
    var mapkpase_29: dimensionless {init: 1};
    var mekppmapkpase_30: dimensionless {init: -1};
    var mapkp_30: dimensionless {init: 1};
    var mapkpase_30: dimensionless {init: 1};
  enddef;

  def comp reaction_rates as
    var v_1: micromolar;
    var v_2: micromolar;
    var v_3: micromolar;
    var v_4: micromolar;
    var v_5: micromolar;
    var v_6: micromolar;
    var v_7: micromolar;
    var v_8: micromolar;
    var v_9: micromolar;
    var v_10: micromolar;
    var v_11: micromolar;
    var v_12: micromolar;
    var v_13: micromolar;
    var v_14: micromolar;
    var v_15: micromolar;
    var v_16: micromolar;
    var v_17: micromolar;
    var v_18: micromolar;
    var v_19: micromolar;
    var v_20: micromolar;
    var v_21: micromolar;
    var v_22: micromolar;
    var v_23: micromolar;
    var v_24: micromolar;
    var v_25: micromolar;
    var v_26: micromolar;
    var v_27: micromolar;
    var v_28: micromolar;
    var v_29: micromolar;
    var v_30: micromolar;
  enddef;

  // title: mos
  // alternative: MAPKKK
  def comp mos as
    var time: second {pub: in};
    var mos: micromolar {init: 0.003, pub: out};
    var mostot: micromolar {pub: in};
    var a1: second_order_rate_constant_units {pub: in};
    var mosstar: micromolar {pub: in};
    var mose1: micromolar {pub: in};
    var mosstare2: micromolar {pub: in};
    var mekstarmosstar: micromolar {pub: in};
    var e1tot: micromolar {pub: in};
    var d1: first_order_rate_constant_units {pub: in};
    var k2: first_order_rate_constant_units {pub: in};
    var mekmosstar: micromolar {pub: in};
    var e_1: micromolar;
    // #1
    e_1 = e1tot-mose1;
    ode(mos, time) = -a1*(mostot-mosstar-mose1-mosstare2-mekmosstar-mekstarmosstar)*e_1+d1*mose1+k2*mosstare2;
  enddef;

  // title: mose1
  // alternative: MAPKKK-E1 complex
  def comp mose1 as
    var time: second {pub: in};
    var mose1: micromolar {init: 0, pub: out};
    var a1: second_order_rate_constant_units {pub: in};
    var mostot: micromolar {pub: in};
    var mosstar: micromolar {pub: in};
    var mosstare2: micromolar {pub: in};
    var mekmosstar: micromolar {pub: in};
    var mekstarmosstar: micromolar {pub: in};
    var e1tot: micromolar {pub: in};
    var d1: first_order_rate_constant_units {pub: in};
    var k1: first_order_rate_constant_units {pub: in};
    // #2
    ode(mose1, time) = a1*(mostot-mosstar-mose1-mosstare2-mekmosstar-mekstarmosstar)*(e1tot-mose1)-(d1+k1)*mose1;
  enddef;

  // title: mosstar
  // alternative: activated MAPKKK
  def comp mosstar as
    var time: second {pub: in};
    var mosstar: micromolar {init: 0, pub: out};
    var a2: second_order_rate_constant_units {pub: in};
    var e2tot: micromolar {pub: in};
    var mosstare2: micromolar {pub: in};
    var d2: first_order_rate_constant_units {pub: in};
    var k1: first_order_rate_constant_units {pub: in};
    var mose1: micromolar {pub: in};
    var k3: first_order_rate_constant_units {pub: in};
    var d3: first_order_rate_constant_units {pub: in};
    var mekmosstar: micromolar {pub: in};
    var a3: second_order_rate_constant_units {pub: in};
    var mektot: micromolar {pub: in};
    var mekstar: micromolar {pub: in};
    var mekstarstar: micromolar {pub: in};
    var mekstarmekpase: micromolar {pub: in};
    var mekstarstarmekpase: micromolar {pub: in};
    var mekstarmosstar: micromolar {pub: in};
    var mapkmekstarstar: micromolar {pub: in};
    var mapkstarmekstarstar: micromolar {pub: in};
    var k5: first_order_rate_constant_units {pub: in};
    var d5: first_order_rate_constant_units {pub: in};
    var a5: second_order_rate_constant_units {pub: in};
    var e_2: micromolar;
    // #3
    e_2 = e2tot-mosstare2;
    var mek: micromolar;
    mek = mektot-mekstar-mekstarstar-mekstarmekpase-mekstarstarmekpase-mekmosstar-mekstarmosstar-mapkmekstarstar-mapkstarmekstarstar;
    ode(mosstar, time) = -a2*mosstar*e_2+d2*mosstare2+k1*mose1+(k3+d3)*mekmosstar-a3*mosstar*mek+(k5+d5)*mekstarmosstar-a5*mekstar*mosstar;
  enddef;

  // title: mosstare2
  // alternative: activated MAPKKK-E2 complex
  def comp mosstare2 as
    var time: second {pub: in};
    var mosstare2: micromolar {init: 0, pub: out};
    var a2: second_order_rate_constant_units {pub: in};
    var mosstar: micromolar {pub: in};
    var e2tot: micromolar {pub: in};
    var d2: first_order_rate_constant_units {pub: in};
    var k2: first_order_rate_constant_units {pub: in};
    // #4
    ode(mosstare2, time) = a2*mosstar*(e2tot-mosstare2)-(d2+k2)*mosstare2;
  enddef;

  // title: mek
  // alternative: MAPKK
  def comp mek as
    var time: second {pub: in};
    var mek: micromolar {init: 1.2, pub: out};
    var a3: second_order_rate_constant_units {pub: in};
    var mektot: micromolar {pub: in};
    var mekstar: micromolar {pub: in};
    var mekstarstar: micromolar {pub: in};
    var mapkstarmekstarstar: micromolar {pub: in};
    var mekstarstarmekpase: micromolar {pub: in};
    var mekmosstar: micromolar {pub: in};
    var mekstarmosstar: micromolar {pub: in};
    var mapkmekstarstar: micromolar {pub: in};
    var mosstar: micromolar {pub: in};
    var d3: first_order_rate_constant_units {pub: in};
    var k4: first_order_rate_constant_units {pub: in};
    var mekstarmekpase: micromolar {pub: in};
    // #5
    ode(mek, time) = -a3*(mektot-mekstar-mekstarstar-mekstarmekpase-mekstarstarmekpase-mekmosstar-mekstarmosstar-mapkmekstarstar-mapkstarmekstarstar)*mosstar+d3*mekmosstar+k4*mekstarmekpase;
  enddef;

  // title: mekmosstar
  // alternative: MAPKK-activated MAPKKK complex
  def comp mekmosstar as
    var time: second {pub: in};
    var mekmosstar: micromolar {init: 0, pub: out};
    var a3: second_order_rate_constant_units {pub: in};
    var mektot: micromolar {pub: in};
    var mekstar: micromolar {pub: in};
    var mekstarstar: micromolar {pub: in};
    var mekstarmekpase: micromolar {pub: in};
    var mekstarstarmekpase: micromolar {pub: in};
    var mekstarmosstar: micromolar {pub: in};
    var mapkmekstarstar: micromolar {pub: in};
    var mapkstarmekstarstar: micromolar {pub: in};
    var mosstar: micromolar {pub: in};
    var d3: first_order_rate_constant_units {pub: in};
    var k3: first_order_rate_constant_units {pub: in};
    // #6
    ode(mekmosstar, time) = a3*(mektot-mekstar-mekstarstar-mekstarmekpase-mekstarstarmekpase-mekmosstar-mekstarmosstar-mapkmekstarstar-mapkstarmekstarstar)*mosstar-(d3+k3)*mekmosstar;
  enddef;

  // title: mekstar
  // alternative: phosphorylated MAPKK
  def comp mekstar as
    var time: second {pub: in};
    var mekstar: micromolar {init: 0, pub: out};
    var a4: second_order_rate_constant_units {pub: in};
    var mekpasetot: micromolar {pub: in};
    var mekstarmekpase: micromolar {pub: in};
    var mekstarstarmekpase: micromolar {pub: in};
    var d4: first_order_rate_constant_units {pub: in};
    var k3: first_order_rate_constant_units {pub: in};
    var mekmosstar: micromolar {pub: in};
    var k6: first_order_rate_constant_units {pub: in};
    var d5: first_order_rate_constant_units {pub: in};
    var mekstarmosstar: micromolar {pub: in};
    var a5: second_order_rate_constant_units {pub: in};
    var mosstar: micromolar {pub: in};
    var mekpase: micromolar;
    // #7
    mekpase = mekpasetot-mekstarmekpase-mekstarstarmekpase;
    ode(mekstar, time) = -a4*mekstar*mekpase+d4*mekstarmekpase+k3*mekmosstar+k6*mekstarstarmekpase+d5*mekstarmosstar-a5*mekstar*mosstar;
  enddef;

  // title: mekstarmekpase
  // alternative: phopsphorylated MAPKK-MAPKK phosphorylase complex
  def comp mekstarmekpase as
    var mekstarmekpase: micromolar {init: 0, pub: out};
    var time: second {pub: in};
    var a4: second_order_rate_constant_units {pub: in};
    var d4: first_order_rate_constant_units {pub: in};
    var k4: first_order_rate_constant_units {pub: in};
    var mekstar: micromolar {pub: in};
    var mekpasetot: micromolar {pub: in};
    var mekstarstarmekpase: micromolar {pub: in};
    // #8
    ode(mekstarmekpase, time) = a4*mekstar*(mekpasetot-mekstarmekpase-mekstarstarmekpase)-(d4+k4)*mekstarmekpase;
  enddef;

  // title: mekstarmosstar
  // alternative: phosphorylated MAPKK-activated MAPKKK complex
  def comp mekstarmosstar as
    var time: second {pub: in};
    var mekstarmosstar: micromolar {init: 0, pub: out};
    var a5: second_order_rate_constant_units {pub: in};
    var d5: first_order_rate_constant_units {pub: in};
    var k5: first_order_rate_constant_units {pub: in};
    var mekstar: micromolar {pub: in};
    var mosstar: micromolar {pub: in};
    // #9
    ode(mekstarmosstar, time) = a5*mekstar*mosstar-(d5+k5)*mekstarmosstar;
  enddef;

  // title: mekstarstar
  // alternative: biphosphorylated MAPKK
  def comp mekstarstar as
    var time: second {pub: in};
    var mekstarstar: micromolar {init: 0, pub: out};
    var k5: first_order_rate_constant_units {pub: in};
    var mekstarmosstar: micromolar {pub: in};
    var a6: second_order_rate_constant_units {pub: in};
    var mekpasetot: micromolar {pub: in};
    var mekstarmekpase: micromolar {pub: in};
    var d6: first_order_rate_constant_units {pub: in};
    var mekstarstarmekpase: micromolar {pub: in};
    var a7: second_order_rate_constant_units {pub: in};
    var mapktot: micromolar {pub: in};
    var mapkstar: micromolar {pub: in};
    var mapkstarstar: micromolar {pub: in};
    var mapkstarmapkpase: micromolar {pub: in};
    var mapkstarstarmapkpase: micromolar {pub: in};
    var mapkmekstarstar: micromolar {pub: in};
    var mapkstarmekstarstar: micromolar {pub: in};
    var d7: first_order_rate_constant_units {pub: in};
    var k7: first_order_rate_constant_units {pub: in};
    var d9: first_order_rate_constant_units {pub: in};
    var k9: first_order_rate_constant_units {pub: in};
    var a9: second_order_rate_constant_units {pub: in};
    var mapk: micromolar;
    // #10
    mapk = mapktot-mapkstar-mapkstarstar-mapkstarmapkpase-mapkstarstarmapkpase-mapkmekstarstar-mapkstarmekstarstar;
    ode(mekstarstar, time) = k5*mekstarmosstar-a6*mekstarstar*(mekpasetot-mekstarmekpase-mekstarstarmekpase)+d6*mekstarstarmekpase-a7*mekstarstar*mapk+(d7+k7)*mapkmekstarstar+(d9+k9)*mapkstarmekstarstar-a9*mapkstar*mekstarstar;
  enddef;

  // title: mekstarstarmekpase
  // alternative: biphosphorylated MAPKK-MAPKK phosphatase complex
  def comp mekstarstarmekpase as
    var time: second {pub: in};
    var mekstarstarmekpase: micromolar {init: 0, pub: out};
    var a6: second_order_rate_constant_units {pub: in};
    var mekstarstar: micromolar {pub: in};
    var mekpasetot: micromolar {pub: in};
    var mekstarmekpase: micromolar {pub: in};
    var d6: first_order_rate_constant_units {pub: in};
    var k6: first_order_rate_constant_units {pub: in};
    // #11
    ode(mekstarstarmekpase, time) = a6*mekstarstar*(mekpasetot-mekstarmekpase-mekstarstarmekpase)-(d6+k6)*mekstarstarmekpase;
  enddef;

  // title: mapk
  // alternative: MAPK
  def comp mapk as
    var time: second {pub: in};
    var mapk: micromolar {init: 1.2, pub: out};
    var a7: second_order_rate_constant_units {pub: in};
    var mapktot: micromolar {pub: in};
    var mapkstar: micromolar {pub: in};
    var mapkstarstar: micromolar {pub: in};
    var mapkstarmapkpase: micromolar {pub: in};
    var mapkstarstarmapkpase: micromolar {pub: in};
    var mapkmekstarstar: micromolar {pub: in};
    var mapkstarmekstarstar: micromolar {pub: in};
    var mekstarstar: micromolar {pub: in};
    var d7: first_order_rate_constant_units {pub: in};
    var k8: first_order_rate_constant_units {pub: in};
    // #12
    ode(mapk, time) = -a7*(mapktot-mapkstar-mapkstarstar-mapkstarmapkpase-mapkstarstarmapkpase-mapkmekstarstar-mapkstarmekstarstar)*mekstarstar+d7*mapkmekstarstar+k8*mapkstarmapkpase;
  enddef;

  // title: mapkmekstarstar
  // alternative: MAPK-biphosphorylated MAPKK complex
  def comp mapkmekstarstar as
    var time: second {pub: in};
    var mapkmekstarstar: micromolar {init: 0, pub: out};
    var mapktot: micromolar {pub: in};
    var mapkstar: micromolar {pub: in};
    var mapkstarstar: micromolar {pub: in};
    var mapkstarmapkpase: micromolar {pub: in};
    var mapkstarstarmapkpase: micromolar {pub: in};
    var mapkstarmekstarstar: micromolar {pub: in};
    var mekstarstar: micromolar {pub: in};
    var d7: first_order_rate_constant_units {pub: in};
    var k7: first_order_rate_constant_units {pub: in};
    var a7: second_order_rate_constant_units {pub: in};
    // #13
    ode(mapkmekstarstar, time) = a7*(mapktot-mapkstar-mapkstarstar-mapkstarmapkpase-mapkstarstarmapkpase-mapkmekstarstar-mapkstarmekstarstar)*mekstarstar-(d7+k7)*mapkmekstarstar;
  enddef;

  // title: mapkstar
  // alternative: phosphorylated MAPK
  def comp mapkstar as
    var time: second {pub: in};
    var mapkstar: micromolar {init: 0, pub: out};
    var k7: first_order_rate_constant_units {pub: in};
    var mapkmekstarstar: micromolar {pub: in};
    var a8: second_order_rate_constant_units {pub: in};
    var mapkpasetot: micromolar {pub: in};
    var mapkstarmapkpase: micromolar {pub: in};
    var mapkstarstarmapkpase: micromolar {pub: in};
    var d8: first_order_rate_constant_units {pub: in};
    var a9: second_order_rate_constant_units {pub: in};
    var mekstarstar: micromolar {pub: in};
    var d9: first_order_rate_constant_units {pub: in};
    var mapkstarmekstarstar: micromolar {pub: in};
    var k10: first_order_rate_constant_units {pub: in};
    var mapkpase: micromolar;
    // It is being solved in Python
    // #14
    mapkpase = mapkpasetot-mapkstarmapkpase-mapkstarstarmapkpase;
    ode(mapkstar, time) = k7*mapkmekstarstar-a8*mapkstar*mapkpase+d8*mapkstarmapkpase-a9*mapkstar*mekstarstar+d9*mapkstarmekstarstar+k10*mapkstarstarmapkpase;
  enddef;

  // title: mapkstarmekstarstar
  // alternative: phosphorylated MAPK-biphosphorylated MAPKK complex
  def comp mapkstarmekstarstar as
    var time: second {pub: in};
    var mapkstarmekstarstar: micromolar {init: 0, pub: out};
    var a9: second_order_rate_constant_units {pub: in};
    var d9: first_order_rate_constant_units {pub: in};
    var k9: first_order_rate_constant_units {pub: in};
    var mapkstar: micromolar {pub: in};
    var mekstarstar: micromolar {pub: in};
    // #15
    ode(mapkstarmekstarstar, time) = a9*mapkstar*mekstarstar-(d9+k9)*mapkstarmekstarstar;
  enddef;

  // title: mapkstarstar
  // alternative: biphosphorylated MAPK
  def comp mapkstarstar as
    var time: second {pub: in};
    var mapkstarstar: micromolar {init: 0, pub: out};
    var a10: second_order_rate_constant_units {pub: in};
    var mapkpasetot: micromolar {pub: in};
    var mapkstarmapkpase: micromolar {pub: in};
    var mapkstarstarmapkpase: micromolar {pub: in};
    var d10: first_order_rate_constant_units {pub: in};
    var k9: first_order_rate_constant_units {pub: in};
    var mapkstar: micromolar {pub: in};
    var mekstarstar: micromolar {pub: in};
    var mapkstarmekstarstar: micromolar {pub: in};
    // #16
    ode(mapkstarstar, time) = -a10*mapkstarstar*(mapkpasetot-mapkstarmapkpase-mapkstarstarmapkpase)+d10*mapkstarstarmapkpase+k9*mapkstarmekstarstar;
  enddef;

  // title: mapkstarmapkpase
  // alternative: phosphorylated MAPK-MAPK phosphatase complex
  def comp mapkstarmapkpase as
    var time: second {pub: in};
    var mapkstarmapkpase: micromolar {init: 0, pub: out};
    var a8: second_order_rate_constant_units {pub: in};
    var mapkstar: micromolar {pub: in};
    var mapkpasetot: micromolar {pub: in};
    var mapkstarstarmapkpase: micromolar {pub: in};
    var d8: first_order_rate_constant_units {pub: in};
    var k8: first_order_rate_constant_units {pub: in};
    // # 17
    ode(mapkstarmapkpase, time) = a8*mapkstar*(mapkpasetot-mapkstarmapkpase-mapkstarstarmapkpase)-(d8+k8)*mapkstarmapkpase;
  enddef;

  // title: mapkstarstarmapkpase
  // alternative: biphosphorylated MAPK-MAPK phosphatase complex
  def comp mapkstarstarmapkpase as
    var time: second {pub: in};
    var mapkstarstarmapkpase: micromolar {init: 0, pub: out};
    var a10: second_order_rate_constant_units {pub: in};
    var mapkstarstar: micromolar {pub: in};
    var mapkpasetot: micromolar {pub: in};
    var mapkstarmapkpase: micromolar {pub: in};
    var d10: first_order_rate_constant_units {pub: in};
    var k10: first_order_rate_constant_units {pub: in};
    // #18
    ode(mapkstarstarmapkpase, time) = a10*mapkstarstar*(mapkpasetot-mapkstarmapkpase-mapkstarstarmapkpase)-(d10+k10)*mapkstarstarmapkpase;
  enddef;
  def map between environment and mos for
    vars time and time;
  enddef;
  def map between rate_constants and mos for
    vars a1 and a1;
    vars d1 and d1;
    vars k2 and k2;
  enddef;
  def map between total_concs and mos for
    vars mostot and mostot;
    vars e1tot and e1tot;
  enddef;
  def map between mosstar and mos for
    vars mosstar and mosstar;
  enddef;
  def map between mose1 and mos for
    vars mose1 and mose1;
  enddef;
  def map between mosstare2 and mos for
    vars mosstare2 and mosstare2;
  enddef;
  def map between mekmosstar and mos for
    vars mekmosstar and mekmosstar;
  enddef;
  def map between mekstarmosstar and mos for
    vars mekstarmosstar and mekstarmosstar;
  enddef;
  def map between environment and mose1 for
    vars time and time;
  enddef;
  def map between rate_constants and mose1 for
    vars a1 and a1;
    vars d1 and d1;
    vars k1 and k1;
  enddef;
  def map between total_concs and mose1 for
    vars mostot and mostot;
    vars e1tot and e1tot;
  enddef;
  def map between mosstar and mose1 for
    vars mosstar and mosstar;
    vars mose1 and mose1;
  enddef;
  def map between mosstare2 and mose1 for
    vars mosstare2 and mosstare2;
  enddef;
  def map between mekmosstar and mose1 for
    vars mekmosstar and mekmosstar;
  enddef;
  def map between mekstarmosstar and mose1 for
    vars mekstarmosstar and mekstarmosstar;
  enddef;
  def map between environment and mosstar for
    vars time and time;
  enddef;
  def map between rate_constants and mosstar for
    vars a2 and a2;
    vars d2 and d2;
    vars k1 and k1;
    vars a3 and a3;
    vars d3 and d3;
    vars k3 and k3;
    vars a5 and a5;
    vars d5 and d5;
    vars k5 and k5;
  enddef;
  def map between total_concs and mosstar for
    vars mektot and mektot;
    vars e2tot and e2tot;
  enddef;
  def map between mosstare2 and mosstar for
    vars mosstare2 and mosstare2;
    vars mosstar and mosstar;
  enddef;
  def map between mekmosstar and mosstar for
    vars mekmosstar and mekmosstar;
    vars mosstar and mosstar;
  enddef;
  def map between mekstar and mosstar for
    vars mekstar and mekstar;
    vars mosstar and mosstar;
  enddef;
  def map between mekstarstar and mosstar for
    vars mekstarstar and mekstarstar;
  enddef;
  def map between mekstarmekpase and mosstar for
    vars mekstarmekpase and mekstarmekpase;
  enddef;
  def map between mekstarstarmekpase and mosstar for
    vars mekstarstarmekpase and mekstarstarmekpase;
  enddef;
  def map between mekstarmosstar and mosstar for
    vars mekstarmosstar and mekstarmosstar;
    vars mosstar and mosstar;
  enddef;
  def map between mapkmekstarstar and mosstar for
    vars mapkmekstarstar and mapkmekstarstar;
  enddef;
  def map between mapkstarmekstarstar and mosstar for
    vars mapkstarmekstarstar and mapkstarmekstarstar;
  enddef;
  def map between environment and mosstare2 for
    vars time and time;
  enddef;
  def map between rate_constants and mosstare2 for
    vars a2 and a2;
    vars d2 and d2;
    vars k2 and k2;
  enddef;
  def map between total_concs and mosstare2 for
    vars e2tot and e2tot;
  enddef;
  def map between environment and mek for
    vars time and time;
  enddef;
  def map between rate_constants and mek for
    vars a3 and a3;
    vars d3 and d3;
    vars k4 and k4;
  enddef;
  def map between total_concs and mek for
    vars mektot and mektot;
  enddef;
  def map between mekstar and mek for
    vars mekstar and mekstar;
  enddef;
  def map between mekstarstar and mek for
    vars mekstarstar and mekstarstar;
  enddef;
  def map between mekstarmekpase and mek for
    vars mekstarmekpase and mekstarmekpase;
  enddef;
  def map between mekstarstarmekpase and mek for
    vars mekstarstarmekpase and mekstarstarmekpase;
  enddef;
  def map between mapkstarmekstarstar and mek for
    vars mapkstarmekstarstar and mapkstarmekstarstar;
  enddef;
  def map between mekmosstar and mek for
    vars mekmosstar and mekmosstar;
  enddef;
  def map between mekstarmosstar and mek for
    vars mekstarmosstar and mekstarmosstar;
  enddef;
  def map between mapkmekstarstar and mek for
    vars mapkmekstarstar and mapkmekstarstar;
  enddef;
  def map between mosstar and mek for
    vars mosstar and mosstar;
  enddef;
  def map between environment and mekmosstar for
    vars time and time;
  enddef;
  def map between rate_constants and mekmosstar for
    vars a3 and a3;
    vars d3 and d3;
    vars k3 and k3;
  enddef;
  def map between total_concs and mekmosstar for
    vars mektot and mektot;
  enddef;
  def map between mekstar and mekmosstar for
    vars mekstar and mekstar;
    vars mekmosstar and mekmosstar;
  enddef;
  def map between mekstarstar and mekmosstar for
    vars mekstarstar and mekstarstar;
  enddef;
  def map between mekstarmekpase and mekmosstar for
    vars mekstarmekpase and mekstarmekpase;
  enddef;
  def map between mekstarstarmekpase and mekmosstar for
    vars mekstarstarmekpase and mekstarstarmekpase;
  enddef;
  def map between mekstarmosstar and mekmosstar for
    vars mekstarmosstar and mekstarmosstar;
  enddef;
  def map between mapkmekstarstar and mekmosstar for
    vars mapkmekstarstar and mapkmekstarstar;
  enddef;
  def map between mapkstarmekstarstar and mekmosstar for
    vars mapkstarmekstarstar and mapkstarmekstarstar;
  enddef;
  def map between environment and mekstar for
    vars time and time;
  enddef;
  def map between rate_constants and mekstar for
    vars a4 and a4;
    vars d4 and d4;
    vars k3 and k3;
    vars a5 and a5;
    vars d5 and d5;
    vars k6 and k6;
  enddef;
  def map between total_concs and mekstar for
    vars mekpasetot and mekpasetot;
  enddef;
  def map between mekstarmekpase and mekstar for
    vars mekstarmekpase and mekstarmekpase;
    vars mekstar and mekstar;
  enddef;
  def map between mekstarstarmekpase and mekstar for
    vars mekstarstarmekpase and mekstarstarmekpase;
  enddef;
  def map between mekstarmosstar and mekstar for
    vars mekstarmosstar and mekstarmosstar;
    vars mekstar and mekstar;
  enddef;
  def map between environment and mekstarmekpase for
    vars time and time;
  enddef;
  def map between rate_constants and mekstarmekpase for
    vars a4 and a4;
    vars d4 and d4;
    vars k4 and k4;
  enddef;
  def map between mekstarstarmekpase and mekstarmekpase for
    vars mekstarstarmekpase and mekstarstarmekpase;
    vars mekstarmekpase and mekstarmekpase;
  enddef;
  def map between total_concs and mekstarmekpase for
    vars mekpasetot and mekpasetot;
  enddef;
  def map between environment and mekstarmosstar for
    vars time and time;
  enddef;
  def map between rate_constants and mekstarmosstar for
    vars a5 and a5;
    vars d5 and d5;
    vars k5 and k5;
  enddef;
  def map between environment and mekstarstar for
    vars time and time;
  enddef;
  def map between rate_constants and mekstarstar for
    vars a6 and a6;
    vars d6 and d6;
    vars k5 and k5;
    vars a7 and a7;
    vars d7 and d7;
    vars k7 and k7;
    vars a9 and a9;
    vars d9 and d9;
    vars k9 and k9;
  enddef;
  def map between total_concs and mekstarstar for
    vars mekpasetot and mekpasetot;
    vars mapktot and mapktot;
  enddef;
  def map between mekstarmosstar and mekstarstar for
    vars mekstarmosstar and mekstarmosstar;
  enddef;
  def map between mekstarmekpase and mekstarstar for
    vars mekstarmekpase and mekstarmekpase;
  enddef;
  def map between mekstarstarmekpase and mekstarstar for
    vars mekstarstarmekpase and mekstarstarmekpase;
    vars mekstarstar and mekstarstar;
  enddef;
  def map between mapkstarstar and mekstarstar for
    vars mapkstarstar and mapkstarstar;
    vars mekstarstar and mekstarstar;
  enddef;
  def map between mapkstarmapkpase and mekstarstar for
    vars mapkstarmapkpase and mapkstarmapkpase;
  enddef;
  def map between mapkstarstarmapkpase and mekstarstar for
    vars mapkstarstarmapkpase and mapkstarstarmapkpase;
  enddef;
  def map between mapkmekstarstar and mekstarstar for
    vars mapkmekstarstar and mapkmekstarstar;
    vars mekstarstar and mekstarstar;
  enddef;
  def map between mapkstarmekstarstar and mekstarstar for
    vars mapkstarmekstarstar and mapkstarmekstarstar;
    vars mekstarstar and mekstarstar;
  enddef;
  def map between environment and mekstarstarmekpase for
    vars time and time;
  enddef;
  def map between rate_constants and mekstarstarmekpase for
    vars a6 and a6;
    vars d6 and d6;
    vars k6 and k6;
  enddef;
  def map between total_concs and mekstarstarmekpase for
    vars mekpasetot and mekpasetot;
  enddef;
  def map between environment and mapk for
    vars time and time;
  enddef;
  def map between rate_constants and mapk for
    vars a7 and a7;
    vars d7 and d7;
    vars k8 and k8;
  enddef;
  def map between total_concs and mapk for
    vars mapktot and mapktot;
  enddef;
  def map between mapkstar and mapk for
    vars mapkstar and mapkstar;
  enddef;
  def map between mapkstarstar and mapk for
    vars mapkstarstar and mapkstarstar;
  enddef;
  def map between mapkstarmapkpase and mapk for
    vars mapkstarmapkpase and mapkstarmapkpase;
  enddef;
  def map between mapkstarstarmapkpase and mapk for
    vars mapkstarstarmapkpase and mapkstarstarmapkpase;
  enddef;
  def map between mapkmekstarstar and mapk for
    vars mapkmekstarstar and mapkmekstarstar;
  enddef;
  def map between mapkstarmekstarstar and mapk for
    vars mapkstarmekstarstar and mapkstarmekstarstar;
  enddef;
  def map between mekstarstar and mapk for
    vars mekstarstar and mekstarstar;
  enddef;
  def map between environment and mapkmekstarstar for
    vars time and time;
  enddef;
  def map between rate_constants and mapkmekstarstar for
    vars a7 and a7;
    vars d7 and d7;
    vars k7 and k7;
  enddef;
  def map between total_concs and mapkmekstarstar for
    vars mapktot and mapktot;
  enddef;
  def map between mapkstar and mapkmekstarstar for
    vars mapkstar and mapkstar;
    vars mapkmekstarstar and mapkmekstarstar;
  enddef;
  def map between mapkstarstar and mapkmekstarstar for
    vars mapkstarstar and mapkstarstar;
  enddef;
  def map between mapkstarmapkpase and mapkmekstarstar for
    vars mapkstarmapkpase and mapkstarmapkpase;
  enddef;
  def map between mapkstarstarmapkpase and mapkmekstarstar for
    vars mapkstarstarmapkpase and mapkstarstarmapkpase;
  enddef;
  def map between mapkstarmekstarstar and mapkmekstarstar for
    vars mapkstarmekstarstar and mapkstarmekstarstar;
  enddef;
  def map between environment and mapkstar for
    vars time and time;
  enddef;
  def map between rate_constants and mapkstar for
    vars a8 and a8;
    vars d8 and d8;
    vars k7 and k7;
    vars a9 and a9;
    vars d9 and d9;
    vars k10 and k10;
  enddef;
  def map between total_concs and mapkstar for
    vars mapkpasetot and mapkpasetot;
  enddef;
  def map between mapkstarmapkpase and mapkstar for
    vars mapkstarmapkpase and mapkstarmapkpase;
    vars mapkstar and mapkstar;
  enddef;
  def map between mapkstarstarmapkpase and mapkstar for
    vars mapkstarstarmapkpase and mapkstarstarmapkpase;
  enddef;
  def map between mekstarstar and mapkstar for
    vars mekstarstar and mekstarstar;
    vars mapkstar and mapkstar;
  enddef;
  def map between mapkstarmekstarstar and mapkstar for
    vars mapkstarmekstarstar and mapkstarmekstarstar;
    vars mapkstar and mapkstar;
  enddef;
  def map between environment and mapkstarmekstarstar for
    vars time and time;
  enddef;
  def map between rate_constants and mapkstarmekstarstar for
    vars a9 and a9;
    vars d9 and d9;
    vars k9 and k9;
  enddef;
  def map between environment and mapkstarstar for
    vars time and time;
  enddef;
  def map between rate_constants and mapkstarstar for
    vars a10 and a10;
    vars d10 and d10;
    vars k9 and k9;
  enddef;
  def map between total_concs and mapkstarstar for
    vars mapkpasetot and mapkpasetot;
  enddef;
  def map between mapkstarmapkpase and mapkstarstar for
    vars mapkstarmapkpase and mapkstarmapkpase;
  enddef;
  def map between mapkstarstarmapkpase and mapkstarstar for
    vars mapkstarstarmapkpase and mapkstarstarmapkpase;
    vars mapkstarstar and mapkstarstar;
  enddef;
  def map between mapkstar and mapkstarstar for
    vars mapkstar and mapkstar;
  enddef;
  def map between mapkstarmekstarstar and mapkstarstar for
    vars mapkstarmekstarstar and mapkstarmekstarstar;
  enddef;
  def map between environment and mapkstarmapkpase for
    vars time and time;
  enddef;
  def map between rate_constants and mapkstarmapkpase for
    vars a8 and a8;
    vars d8 and d8;
    vars k8 and k8;
  enddef;
  def map between total_concs and mapkstarmapkpase for
    vars mapkpasetot and mapkpasetot;
  enddef;
  def map between mapkstarstarmapkpase and mapkstarmapkpase for
    vars mapkstarstarmapkpase and mapkstarstarmapkpase;
    vars mapkstarmapkpase and mapkstarmapkpase;
  enddef;
  def map between environment and mapkstarstarmapkpase for
    vars time and time;
  enddef;
  def map between rate_constants and mapkstarstarmapkpase for
    vars a10 and a10;
    vars d10 and d10;
    vars k10 and k10;
  enddef;
  def map between total_concs and mapkstarstarmapkpase for
    vars mapkpasetot and mapkpasetot;
  enddef;
  // The Mitogen-Activated Protein Kinase (MAPK) Cascade
  //
  // James Lawson
  //
  // Auckland Bioengineering Institute, The University of Auckland
  //
  // Model Status
  //
  // This CellML model runs in both OpenCell and COR to reproduce the results given by running the Mathematica description of the model (provided by the original model author) using the Mathematica NDSolve integration algorithm. The units have been checked and they are consistent.
  //
  // Model Structure
  //
  // ABSTRACT: The mitogen-activated protein kinase (MAPK) cascade is a highly conserved series of three protein kinases implicated in diverse biological processes. Here we demonstrate that the cascade arrangement has unexpected consequences for the dynamics of MAPK signaling. We solved the rate equations for the cascade numerically and found that MAPK is predicted to behave like a highly cooperative enzyme, even though it was not assumed that any of the enzymes in the cascade were regulated cooperatively. Measurements of MAPK activation in Xenopus oocyte extracts confirmed this prediction. The stimulus/response curve of the MAPK was found to be as steep as that of a cooperative enzyme with a Hill coefficient of 4-5, well in excess of that of the classical allosteric protein hemoglobin. The shape of the MAPK stimulus/ response curve may make the cascade particularly appropriate for mediating processes like mitogenesis, cell fate induction, and oocyte maturation, where a cell switches from one discrete state to another.
  //
  // The original paper reference is cited below:
  //
  // Ultrasensitivity in the mitogen-activated protein cascade, Chi-Ying F. Huang and James E. Ferrell, Jr., 1996, Proc. Natl. Acad. Sci. USA , 93, 10078-10083. PubMed ID: 8816754 (http://www.ncbi.nlm.nih.gov/pubmed/8816754)
  //
  // the conventional rendering of the MAPK cascade
  //
  // Schematic diagram of the MAPK cascade described by the model.
enddef;
// rdf:#$bO+A32
// boundIntervals: endingValue 100
