<?xml version='1.0' encoding='UTF-8'?>
<model cmeta:id="RE_S" name="reactions_set" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#">
    <!-- DIMENSIONS-->
    <units name="mM_per_sec">
        <unit prefix="milli" units="mole"/>
        <unit exponent="-1" units="litre"/>
        <unit exponent="-1" units="second"/>
    </units>
    <units name="mM">
        <unit prefix="milli" units="mole"/>
        <unit exponent="-1" units="litre"/>
    </units>
    <units name="per_sec">
        <unit exponent="-1" units="second"/>
    </units>
    <units name="per_sec_per_11mM">
        <unit exponent="-1" units="second"/>
        <unit exponent="-11" units="mM"/>
    </units>
    <units name="per_sec_per_7mM">
        <unit exponent="-1" units="second"/>
        <unit exponent="-7" units="mM"/>
    </units>
    <units name="per_sec_per_mM">
        <unit exponent="-1" units="second"/>
        <unit exponent="-1" units="mM"/>
    </units>
    <units name="per_sec_per_3mM">
        <unit exponent="-1" units="second"/>
        <unit exponent="-3" units="mM"/>
    </units>
    <units name="per_sec_per_2mM">
        <unit exponent="-1" units="second"/>
        <unit exponent="-2" units="mM"/>
    </units>
    <component cmeta:id="CONS" name="concentrations">
        <variable cmeta:id="glu" initial_value="2" name="C6H12O6" units="mM"/>
        <variable cmeta:id="NAD" initial_value="1" name="C21H26N7O14P2" units="mM"/>
        <variable cmeta:id="ADP" initial_value="0.1" name="C10H15N5O10P2" units="mM"/>
        <variable cmeta:id="PI" initial_value="1" name="PO4" units="mM"/>
        <variable cmeta:id="PYR" initial_value="1" name="C3H4O3" units="mM"/>
        <variable cmeta:id="NADH" initial_value="1" name="C21H27N7O14P2" units="mM"/>
        <variable cmeta:id="ATP" initial_value="1" name="C10H16N5O13P3" units="mM"/>
        <variable cmeta:id="WATER" initial_value="1" name="H2O" units="mM"/>
        <variable cmeta:id="HYDROGEN" initial_value="1" name="H" units="mM"/>
        <variable cmeta:id="CARBON_DIOXYDE" initial_value="1" name="CO2" units="mM"/>
        <variable cmeta:id="ETHYL" initial_value="1" name="C2H4O" units="mM"/>
        <variable cmeta:id="ETHNANOL" initial_value="1" name="C2H5OH" units="mM"/>
        <variable cmeta:id="TIME" name="t" units="second"/>
        <!-- <><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><>
      <<<      Reaction 1      >>>-->
        <variable initial_value="0.1" name="k_f_1" units="per_sec_per_11mM"/>
        <variable initial_value="0.01" name="k_r_1" units="per_sec_per_7mM"/>
        <variable name="v_1" units="mM_per_sec"/>
        <!-- The rate of reaction (v-1) based on the concentrations of the constituents-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f_1</ci>
                        <apply>
                            <power/>
                            <ci>C6H12O6</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>C21H26N7O14P2</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>C10H15N5O10P2</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>PO4</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>H</ci>
                            <cn cellml:units="dimensionless">4</cn>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r_1</ci>
                        <apply>
                            <power/>
                            <ci>C3H4O3</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>C21H27N7O14P2</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>C10H16N5O13P3</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>H2O</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- ########################################################################################################-->
        <!-- <><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><>
     <<<      Reaction 2      >>>-->
        <variable initial_value="0.1" name="k_f_2" units="per_sec_per_mM"/>
        <variable initial_value="0.001" name="k_r_2" units="per_sec_per_3mM"/>
        <variable name="v_2" units="mM_per_sec"/>
        <!-- The rate of reaction (v_2) based on the concentrations of the constituents-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_2</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f_2</ci>
                        <apply>
                            <power/>
                            <ci>C3H4O3</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r_2</ci>
                        <apply>
                            <power/>
                            <ci>CO2</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>C2H4O</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
        </math>
        <!-- ########################################################################################################-->
        <!-- <><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><><>
     <<<      Reaction 3      >>>-->
        <variable initial_value="0.1" name="k_f_3" units="per_sec_per_2mM"/>
        <variable initial_value="0.01" name="k_r_3" units="per_sec_per_2mM"/>
        <variable name="v_3" units="mM_per_sec"/>
        <!-- The rate of reaction (v_3) based on the concentrations of the constituents-->
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>v_3</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f_3</ci>
                        <apply>
                            <power/>
                            <ci>C2H4O</ci>
                            <cn cellml:units="dimensionless">1</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>C21H27N7O14P2</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r_3</ci>
                        <apply>
                            <power/>
                            <ci>C2H5OH</ci>
                            <cn cellml:units="dimensionless">1</cn>
                        </apply>
                        <apply>
                            <power/>
                            <ci>C21H26N7O14P2</ci>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                    </apply>
                </apply>
            </apply>
            <!-- ########################################################################################################-->
            <!-- rates of consumption or production of constituents-->
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C6H12O6</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">1</cn>
                    </apply>
                    <ci>v_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C21H26N7O14P2</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <times/>
                        <apply>
                            <minus/>
                            <cn cellml:units="dimensionless">2</cn>
                        </apply>
                        <ci>v_1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>v_3</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C10H15N5O10P2</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>v_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>PO4</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">2</cn>
                    </apply>
                    <ci>v_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C3H4O3</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>v_1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>v_2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C21H27N7O14P2</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>v_1</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>v_3</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C10H16N5O13P3</ci>
                </apply>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>v_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>H2O</ci>
                </apply>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>v_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>H</ci>
                </apply>
                <apply>
                    <times/>
                    <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">4</cn>
                    </apply>
                    <ci>v_1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>CO2</ci>
                </apply>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>v_2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C2H4O</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>v_2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <cn cellml:units="dimensionless">1</cn>
                        <ci>v_3</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>C2H5OH</ci>
                </apply>
                <apply>
                    <times/>
                    <cn cellml:units="dimensionless">1</cn>
                    <ci>v_3</ci>
                </apply>
            </apply>
        </math>
    </component>
</model>
